CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Just perform Z-project, no need to adjust intensity', 'Blue: VEcad', 'Green: Laminin', 'Red: Lyve1']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, you’ll need to specify the image type as ‘Color image’ and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "total")
    Name to assign these images:total
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "adjNormal")
    Name to assign these images:normal
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "core")
    Name to assign these images:tumor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:total
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ColorToGray:[module_num:6|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
    Select the input image:normal
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:NormalVEcad
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
ColorToGray:[module_num:7|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
    Select the input image:tumor
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:No
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    Convert blue to gray?:Yes
    Name the output image:TumorVEcad
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
Threshold:[module_num:8|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
    Select the input image:OrigBlue
    Name the output image:VEcad
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1
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    Lower outlier fraction:0.01
    Upper outlier fraction:0.01
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:VEcad
    Name the primary objects to be identified:VEcad_Obj
    Typical diameter of objects, in pixel units (Min,Max):10,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
SplitOrMergeObjects:[module_num:10|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
    Select the input objects:VEcad_Obj
    Name the new objects:VEcad_Obj2
    Operation:Merge
    Maximum distance within which to merge objects:1
    Merge using a grayscale image?:No
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    Merging method:Distance
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
ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:VEcad_Obj2
    Name the output objects:VEcad_Obj3
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:NormalVEcad, OrigGreen, OrigRed, TumorVEcad
    Select objects to measure:VEcad_Obj3

ExportToSpreadsheet:[module_num:13|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notes:['This module is used to export the full set of measurements obtained by the pipeline. Measurements such as object counts, colocalization percentages and area fractions are saved to a per-image file (that is, one value per image); measurements such as colocalized/non-colocalized status and centroid distances are saved to a per-object file (one value per object).']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/ObjectIntensity_Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:VEcad_Obj3|Intensity_MeanIntensity_OrigGreen,VEcad_Obj3|Intensity_MeanIntensity_NormalVEcad,VEcad_Obj3|Intensity_MeanIntensity_TumorVEcad,VEcad_Obj3|Intensity_MeanIntensity_OrigRed,VEcad_Obj3|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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